CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:12
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '---', 'Use regular expressions to match and name metadata in the file and path names. ']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:DrosophilaEmbryo_GFPHistone_(?P<FrameNumber>[0-9]*)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '---', "Load the images by matching files in all folders against the text pattern 'GFPHistone'."]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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:OrigColor
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D:No
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
Groups:[module_num:4|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notes:['The Groups module optionally allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, time-lapse movies, etc.', '---', "Group the analysis by the 'Run' metadata so that each folder is analyzed separately. "]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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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notes:['Convert the color image to grayscale.']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
    Select the input image:OrigColor
    Conversion method:Combine
    Image type:RGB
    Name the output image:OrigGray
    Relative weight of the red channel:1
    Relative weight of the green channel:1
    Relative weight of the blue channel:1
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
IdentifyPrimaryObjects:[module_num:6|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notes:['Identify the fly embryos from the histone stain image. Three-class thresholding works better than the default two-class method.']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
    Select the input image:OrigGray
    Name the primary objects to be identified:embryos
    Typical diameter of objects, in pixel units (Min,Max):30,9999
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
TrackObjects:[module_num:7|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notes:['']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
    Choose a tracking method:Overlap
    Select the objects to track:embryos
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    Maximum pixel distance to consider matches:15
    Select display option:Color and Number
    Save color-coded image?:Yes
    Name the output image:TrackedCells
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    Filter objects by lifetime?:No
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
OverlayOutlines:[module_num:8|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notes:['Overlay the embryo outlines on the grayscale image.']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enabled:False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
    Display outlines on a blank image?:Yes
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    Name the output image:OutlineImage
    Outline display mode:Color
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    How to outline:Outer

ExportToSpreadsheet:[module_num:9|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notes:['Export any measurements to a comma-delimited file (.csv). The measurements made for the embryo objects will be saved to separate .csv files, in addition to the per-image .csv.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Desktop\\\\\\\\data_pckg_2\\\\\\\\cellprofiler_samples\\\\\\\\seq2-cp\\\\\\\\embryos
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    :embryos|TrackObjects_ParentObjectNumber_15,embryos|TrackObjects_Label_15,embryos|TrackObjects_ParentImageNumber_15,embryos|TrackObjects_TrajectoryX_15,embryos|TrackObjects_TrajectoryY_15
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:overlap15_
    Overwrite existing files without warning?:Yes
    Data to export:embryos
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes

DisplayDataOnImage:[module_num:10|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
    Display object or image measurements?:Object
    Select the input objects:embryos
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:OrigGray
    Text color:#30CF64
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):1
    Display mode:Text
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    Display background image?:No
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
Tile:[module_num:11|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notes:['Tile the original color image, the outlined image and the image of tracked labels together.']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
    Select an input image:OrigColor
    Name the output image:tileImage
    Tile assembly method:Within cycles
    Final number of rows:1
    Final number of columns:12
    Image corner to begin tiling:top left
    Direction to begin tiling:row
    Use meander mode?:No
    Automatically calculate number of rows?:No
    Automatically calculate number of columns?:Yes
    Select an additional image to tile:TrackedCells
    Select an additional image to tile:DisplayImage

SaveImages:[module_num:12|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:tileImage
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    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigColor
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    Append a suffix to the image file name?:No
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    Saved file format:png
    Output file location:Default Input Folder sub-folder|Desktop\\\\\\\\data_pckg_2\\\\\\\\cellprofiler_samples\\\\\\\\seq2-cp\\\\\\\\embryos
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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